<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="4.6.13">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" parameter_version="1">
        <parameter name="File names">
            <file relative_path="../../QE_HFX_unifr/converted/20250506_CVOL_bk_mapp_00.mzML">/Volumes/mapp_metabolomics/public/QE_HFX_unifr/converted/20250506_CVOL_bk_mapp_00.mzML</file>
            <file relative_path="../../QE_HFX_unifr/converted/20250506_CVOL_bk_mapp_01.mzML">/Volumes/mapp_metabolomics/public/QE_HFX_unifr/converted/20250506_CVOL_bk_mapp_01.mzML</file>
            <file relative_path="../../QE_HFX_unifr/converted/20250506_CVOL_bk_mapp_02_20250508021707.mzML">/Volumes/mapp_metabolomics/public/QE_HFX_unifr/converted/20250506_CVOL_bk_mapp_02_20250508021707.mzML</file>
            <file relative_path="../../QE_HFX_unifr/converted/20250506_CVOL_bk_mapp_02.mzML">/Volumes/mapp_metabolomics/public/QE_HFX_unifr/converted/20250506_CVOL_bk_mapp_02.mzML</file>
            <file relative_path="../../QE_HFX_unifr/converted/20250506_CVOL_bk_mapp_pre_00.mzML">/Volumes/mapp_metabolomics/public/QE_HFX_unifr/converted/20250506_CVOL_bk_mapp_pre_00.mzML</file>
            <file relative_path="../../QE_HFX_unifr/converted/20250506_CVOL_bk_mapp_pre_01.mzML">/Volumes/mapp_metabolomics/public/QE_HFX_unifr/converted/20250506_CVOL_bk_mapp_pre_01.mzML</file>
            <file relative_path="../../QE_HFX_unifr/converted/20250506_CVOL_bk_mapp_pre_02.mzML">/Volumes/mapp_metabolomics/public/QE_HFX_unifr/converted/20250506_CVOL_bk_mapp_pre_02.mzML</file>
            <file relative_path="../../QE_HFX_unifr/converted/20250506_CVOL_dbgi_002251_02_01.mzML">/Volumes/mapp_metabolomics/public/QE_HFX_unifr/converted/20250506_CVOL_dbgi_002251_02_01.mzML</file>
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        </parameter>
        <parameter name="Try vendor centroiding">true</parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Metadata file" selected="true">
            <current_file relative_path="../../../../../Users/pma/git_repos/COMMONS_Lab/DBGI/dmso-meoh-extraction-evaluation/docs/mapp_project_00067/mapp_batch_00173/metadata/treated/mapp_batch_00173_metadata.tsv">/Users/pma/git_repos/COMMONS_Lab/DBGI/dmso-meoh-extraction-evaluation/docs/mapp_project_00067/mapp_batch_00173/metadata/treated/mapp_batch_00173_metadata.tsv</current_file>
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        </parameter>
        <parameter name="Sort and color">true</parameter>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
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            <module name="Centroid">
                <parameter name="Noise level">5000000.0</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time"/>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MSn, level ≥ 2">3</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Mass detector" selected_item="Centroid">
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            <module name="Centroid">
                <parameter name="Noise level">0.0</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.0</min>
                <max>12.01</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">+</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Minimum consecutive scans">8</parameter>
        <parameter name="Minimum intensity for consecutive scans">5000000.0</parameter>
        <parameter name="Minimum absolute height">5000000.0</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>15.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">eics</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Smoothing algorithm" selected_item="Savitzky Golay">
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            <module name="Savitzky Golay">
                <parameter name="Retention time width (scans)" selected="true">5</parameter>
                <parameter name="Mobility width (scans)" selected="false">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</parameter>
            </module>
        </parameter>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="Suffix">sm</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">r</parameter>
        <parameter name="Original feature list">KEEP</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.01</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Retention time filter" selected="Use feature edges" unit="MINUTES">0.05</parameter>
            <parameter name="Minimum relative feature height" selected="true">0.25</parameter>
            <parameter name="Minimum required signals" selected="true">1</parameter>
            <parameter name="Limit by ion mobility edges">true</parameter>
            <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Minimum detections in IMS dimension">2</parameter>
            <parameter name="Advanced" selected="false">
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            </parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.3</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.05</parameter>
        <parameter name="Minimum relative height">0.0</parameter>
        <parameter name="Minimum absolute height">50000.0</parameter>
        <parameter name="Min ratio of peak top/edge">1.8</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.0</min>
            <max>1.51</max>
        </parameter>
        <parameter name="Minimum scans (data points)">5</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">deiso</parameter>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.04</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Chemical elements">H,C,N,O,S</parameter>
        <parameter name="m/z tolerance (feature-to-scan)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Maximum charge of isotope m/z">1</parameter>
        <parameter name="Search in scans">SINGLE MOST INTENSE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">3.0</parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.1</parameter>
        <parameter name="Weight for RT">2.0</parameter>
        <parameter name="Mobility tolerance" selected="false"/>
        <parameter name="Mobility weight">1.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">peak</parameter>
        <parameter name="Minimum aligned features (samples)" selected="true">
            <abs>1</abs>
            <rel>0.0</rel>
        </parameter>
        <parameter name="Minimum features in an isotope pattern" selected="true">2</parameter>
        <parameter name="Validate 13C isotope pattern" selected="false">
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        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="features duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Feature with MS2 scan">true</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Never remove annotated rows">false</parameter>
        <parameter name="Reset the feature number ID">true</parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Original feature list">KEEP</parameter>
    </batchstep>
</batch>
